PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Save log file = False
  expName = perceptual-pilot
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound [set every repeat] = $file_name
      startVal [time (s)] = 0.5
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    TextComponent text
      text = d                   t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 0.9
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  Routine train
    SoundComponent sound_2
      sound [set every repeat] = $file_name
      startVal [time (s)] = 0.5
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    TextComponent text_2
      text = d                   t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent key_resp_3
      correctAns = $correct_answer
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'z', 'slash'
      startVal [time (s)] = 0.9
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimuli-train.csv
    loopType = random
    nReps = 2
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    conditions:
      [{'index': 1, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pada.wav', 'vowel': u'a', 'correct_answer': u'z', 'condition': u'confound'},
      {'index': 2, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pata0.wav', 'vowel': u'a', 'correct_answer': u'slash', 'condition': u'voicing'},
      {'index': 3, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pidi.wav', 'vowel': u'i', 'correct_answer': u'z', 'condition': u'confound'},
      {'index': 4, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/piti0.wav', 'vowel': u'i', 'correct_answer': u'slash', 'condition': u'voicing'},
      {'index': 5, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pudu.wav', 'vowel': u'u', 'correct_answer': u'z', 'condition': u'confound'},
      {'index': 6, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/putu0.wav', 'vowel': u'u', 'correct_answer': u'slash', 'condition': u'voicing'}]
    Routine train
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 5
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    conditions:
      [{'index': 1, 'burst': 0, 'voicing': 5, 'file_name': u'../data/raw/stimuli/pada.wav', 'vowel': u'a', 'condition': u'confound'},
      {'index': 2, 'burst': 0, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada0.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 3, 'burst': 1, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada1.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 4, 'burst': 2, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada2.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 5, 'burst': 3, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada3.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 6, 'burst': 4, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada4.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 7, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pada5.wav', 'vowel': u'a', 'condition': u'burst'},
      {'index': 8, 'burst': 5, 'voicing': 0, 'file_name': u'../data/raw/stimuli/pata0.wav', 'vowel': u'a', 'condition': u'voicing'},
      {'index': 9, 'burst': 5, 'voicing': 1, 'file_name': u'../data/raw/stimuli/pata1.wav', 'vowel': u'a', 'condition': u'voicing'},
      {'index': 10, 'burst': 5, 'voicing': 2, 'file_name': u'../data/raw/stimuli/pata2.wav', 'vowel': u'a', 'condition': u'voicing'},
      {'index': 11, 'burst': 5, 'voicing': 3, 'file_name': u'../data/raw/stimuli/pata3.wav', 'vowel': u'a', 'condition': u'voicing'},
      {'index': 12, 'burst': 5, 'voicing': 4, 'file_name': u'../data/raw/stimuli/pata4.wav', 'vowel': u'a', 'condition': u'voicing'}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
    Routine trial
  LoopTerminator trials
